#  *********************************************************************
#  * DISCLAIMER                                                        *
#  *                                                                   *
#  * Neither the authors of this software system, nor their employing  *
#  * institutes, nor the agencies providing financial support for this *
#  * work make any representation or warranty, express or implied,     *
#  * regarding this software system or assume any liability for its    *
#  * use.                                                              *
#  *                                                                   *
#  * This code implementation is the intellectual property of the      *
#  * OpenGATE collaboration.                                           *
#  * By copying, distributing or modifying the Program (or any work    *
#  * based on the Program) you indicate your acceptance of this        *
#  * statement, and all its terms.                                     *
#  *********************************************************************


/gate/source/addSource                                Na22
/gate/source/Na22/gps/particle                    gamma
/gate/source/Na22/gps/energytype                  Mono
/gate/source/Na22/gps/monoenergy                  0.511 MeV
/gate/source/Na22/setActivity                     1000 becquerel
/gate/source/Na22/gps/angtype                     iso
/gate/source/Na22/gps/mintheta                    0. deg
/gate/source/Na22/gps/maxtheta                    0. deg
/gate/source/Na22/gps/minphi                      0. deg
/gate/source/Na22/gps/maxphi                      0. deg
/gate/source/Na22/gps/type Point
/gate/source/Na22/gps/centre		0.0 0.0 4.0 cm
